CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Overlay")
    Name to assign these images:gfp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH4")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH3")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyObjectsManually:[module_num:5|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
    Select the input image:BF
    Name the objects to be identified:worms

EditObjectsManually:[module_num:6|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
    Select the objects to be edited:worms
    Name the edited objects:EditedObjects
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:BF
    Allow overlapping objects?:No

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:RFP
    Select objects to measure:EditedObjects

MeasureObjectIntensity:[module_num:8|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enabled:False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
    Select images to measure:RFP
    Select objects to measure:EditedObjects

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:EditedObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:your file here
    Overwrite existing files without warning?:No
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